// ********** Image Types

(FixedInternalImagePixelType "float")
(FixedImageDimension 3)
(MovingInternalImagePixelType "float")
(MovingImageDimension 3)


// ********** Components

(Registration "MultiResolutionRegistration")
(FixedImagePyramid "FixedSmoothingImagePyramid")
(MovingImagePyramid "MovingSmoothingImagePyramid")
(Interpolator "BSplineInterpolator")
(Metric "AdvancedMattesMutualInformation")
(Optimizer "AdaptiveStochasticGradientDescent")
(ResampleInterpolator "FinalBSplineInterpolator")
(Resampler "DefaultResampler")
(Transform "AffineTransform")


// ********** Pyramid

// Total number of resolutions
(NumberOfResolutions 5)
(ImagePyramidSchedule 16 16 16 8 8 8 4 4 4 2 2 2 1 1 1)


// ********** Transform

(AutomaticTransformInitialization "true")
(AutomaticScalesEstimation "true")
(HowToCombineTransforms "Compose")


// ********** Optimizer

// Maximum number of iterations in each resolution level:
(MaximumNumberOfIterations 500)

(AutomaticParameterEstimation "true")
(UseAdaptiveStepSizes "true")
// This is for original ASGD
(ASGDParameterEstimationMethod "Original")

// ********** Metric

(NumberOfHistogramBins 256)
(FixedLimitRangeRatio 0.0)
(MovingLimitRangeRatio 0.0)
(FixedKernelBSplineOrder 1)
(MovingKernelBSplineOrder 3)
(UseFastAndLowMemoryVersion "true")


// ********** Several

(WriteTransformParametersEachIteration "false")
(WriteTransformParametersEachResolution "true")
(WriteResultImageAfterEachResolution "false")
(WritePyramidImagesAfterEachResolution "false")
(WriteResultImage "false")
(ShowExactMetricValue "false")
(ErodeMask "false")
(UseDirectionCosines "true")


// ********** ImageSampler

//Number of spatial samples used to compute the mutual information in each resolution level:
(ImageSampler "RandomCoordinate")
(NumberOfSpatialSamples 5000)
(NewSamplesEveryIteration "true")


// ********** Interpolator and Resampler

//Order of B-Spline interpolation used in each resolution level:
(BSplineInterpolationOrder 1)

//Order of B-Spline interpolation used for applying the final deformation:
(FinalBSplineInterpolationOrder 3)

//Default pixel value for pixels that come from outside the picture:
(DefaultPixelValue 0)

//the format of resulting deformed moving image
(ResultImageFormat "nii.gz")
